# 1 "/opt/topspin3.7.0/exp/stan/nmr/lists/pp/user/hmqcgpqf_nd.top"
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;hmqcgpqf
;avance-version (12/01/11)
;HMQC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;with decoupling during acquisition
;using gradient pulses for selection
;use pulseprogram 'hmqcgpnd1d' for setup
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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;Avance3.incl
;   for AV III
;
;avance-version (07/12/14)
;
;$CLASS=HighRes Incl
;$COMMENT=


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;$Id: Avance3.incl,v 1.9 2009/07/02 16:40:43 ber Exp $
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  

"p2=p1*2"
"d2=1s/(cnst2*2)"
"d12=20u"
"d13=4u"

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"d0=3u"

"in0=inf1/2"

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"DELTA1=d2-p16-d16-d13-d12"


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; dimension 2D; AQ_mode  (F1) QF
define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td1 / 1)"
"MCREST = d1 - d1"
"MCWRK = 0.500000*d1"

    dccorr
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1 ze 
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LBLAV, MCWRK
      "d0=d0orig + t1loop * in0 "
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2 MCWRK  do:f2
LBLST1, MCWRK 
  MCREST
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3 p1 ph1
  d2 pl2:f2 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  p3:f2 ph3
  d0
  p16:gp1
  d16
  p2 ph2
  d13
  p16:gp2
  d16
  d0
  p3:f2 ph4
  d13
  p16:gp3
  d16
  DELTA1
  d12 pl12:f2 setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  go=2 ph31 
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  MCWRK  do:f2 wr #0 if #0 zd 

  "t1loop+=1"
      "d0=d0orig + t1loop * in0 "
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t1loop=0"
  MCWRK rf #0
  lo to LBLAV times tdav
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exit 
  
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ph1=0 
ph2=0 
ph3=0 2
ph4=0 0 2 2
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                  [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)XH
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
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;use gradient ratio:	gp 1 : gp 2 : gp 3
;			  50 :   30 : 40.1   for C-13
;			  70 :   30 : 50.1   for N-15

;for z-only gradients:
;gpz1: 50% for C-13, 70% for N-15
;gpz2: 30%
;gpz3: 40.1% for C-13, 50.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
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;$Id: hmqcgpqf,v 1.6 2012/01/31 17:49:23 ber Exp $
